PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 100):03.0f}"', 'session': '01'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1200,800]
  color = -0.2314, 0.1216, 0.8353
  expName = Musicrating
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    TextComponent SessionWelcomeMsg
      font = consolas
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Music rating session

        press [space] to begin
    KeyboardComponent KeyStartSession
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine music
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        timer = core.Clock()  # Create a clock object to track time
        start_time = timer.getTime()  # Get the initial time
      Each Frame:
        duration = timer.getTime() - start_time
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    ImageComponent ImageMegaphone
      image = megaphone.png
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = height
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    SoundComponent audiosample
      saveStartStop = False
      sound [set every repeat] = $AudioSample
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      syncScreenRefresh = False
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    ProgressComponent prog
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (0, -0.2)
      progress [set every frame] = duration/4
      saveStartStop = False
      size = (1, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      units = height
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  Routine rating
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    SliderComponent EmotionRating
      borderColor = 0.7255, 0.7255, 0.7255
      color = 1.0000, 1.0000, 1.0000
      fillColor = 0.9216, 0.9216, 0.9216
      font = Consolas
      forceEndRoutine = False
      granularity = 0
      initVal = 0
      labels = ('very\nsad','','','','','neutral','','','','','very\nhappy')
      letterHeight = 0.019
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.8, 0.03)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = rating
      ticks = (-10,-8,-6,-4,-2,0,2,4,6,8,10)
      units = height
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    TextComponent TextRating
      font = consolas
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Rate the piece emotion (-10 = very sad, 10 = very happy)
        press [space] when done rating
    KeyboardComponent KeyConfirmRating
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine break_between
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    VariableComponent RepCount
      startExpValue = 0
      startRoutineValue = RepCount + 1
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    TextComponent SmallBreakT
      font = consolas
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $'rating saved, ' + str(musicRatingLoop.thisN + 1) + ' from 4 samples done\nGo take a break lol\npress [space] to listen to the next piece' if (musicRatingLoop.thisN + 1) % 2 == 0 and (musicRatingLoop.thisN + 1) < musicRatingLoop.nTotal else ('rating saved, ' + str(musicRatingLoop.thisN + 1) + ' from 4 samples done\npress [space] to listen to the next piece') if musicRatingLoop.thisN + 1 < musicRatingLoop.nTotal else ("Completed all " + str(musicRatingLoop.nTotal) + " samples\nthank you for your sacrifice\npress [space] to exit")
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    KeyboardComponent continuepress
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine ending
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    TextComponent Ending
      font = consolas
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        the experiment is complete
        thank you for your sacrifice
        press [space] to exit
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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Flow
  Routine trial
  LoopInitiator musicRatingLoop loopType="TrialHandler"
    conditionsFile = audiosample.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'AudioSample': 'audiofile/1HiFast.wav'},
      {'AudioSample': 'audiofile/1HiSlow.wav'},
      {'AudioSample': 'audiofile/1LoFast.wav'},
      {'AudioSample': 'audiofile/1LoSlow.wav'}]
    Routine music
    Routine rating
    Routine break_between
  LoopTerminator musicRatingLoop
